<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>36</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>TimeSpan.FromHours(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>P1DT12H</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>myArduino_1-6</io:Name>
                <io:PortName>COM4</io:PortName>
                <io:BaudRate>9600</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>false</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>myArduino_1-6</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>myArduino_7-11</io:Name>
                <io:PortName>COM5</io:PortName>
                <io:BaudRate>9600</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>false</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>myArduino_7-11</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>